CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Isotope>.*)_(?P<Antibody>.*).ome.tiff
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<slideName>.*)\\(?P<Region>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:21
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "191Ir")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "193Ir")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "156Gd")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "141Pr")
    Name to assign these images:SMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "143Nd")
    Name to assign these images:Vimentin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "148Nd")
    Name to assign these images:PanKeratin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "155Gd")
    Name to assign these images:FoxP3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "158Gd")
    Name to assign these images:ECadherin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "159Tb")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "161Dy")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "162Dy")
    Name to assign these images:CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "167Er")
    Name to assign these images:GranzymeB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "168Er")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "169Tm")
    Name to assign these images:Col1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "170Er")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "173Yb")
    Name to assign these images:CD45RO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "175Lu")
    Name to assign these images:MHCII
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "149Sm")
    Name to assign these images:H3K4me3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "153Eu")
    Name to assign these images:CD44
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "165Ho")
    Name to assign these images:PD1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "150Nd")
    Name to assign these images:PDL1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Region

ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:10
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:DNA1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA2
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ImageAfterMath
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:CD20, CD3, CD4, CD45RO, CD68, CD8a, Col1, ECadherin, FoxP3, GranzymeB, Ki67, PanKeratin, SMA, Vimentin, DNA1, DNA2, CD44, MHCII, H3K4me3
    Select objects to measure:Cells, Nuclei

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\mallam6\\OneDrive - Georgia Institute of Technology\\4. Project Files\\Lung IMC\\Microarray IMC\\Full Lung Ca Microarray 12A
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Intensity_IntegratedIntensity_DNA1,Cells|Intensity_IntegratedIntensity_FoxP3,Cells|Intensity_IntegratedIntensity_CD3,Cells|Intensity_IntegratedIntensity_CD45RO,Cells|Intensity_IntegratedIntensity_GranzymeB,Cells|Intensity_IntegratedIntensity_CD20,Cells|Intensity_IntegratedIntensity_CD68,Cells|Intensity_IntegratedIntensity_CD4,Cells|Intensity_IntegratedIntensity_DNA2,Cells|Intensity_IntegratedIntensity_ECadherin,Cells|Intensity_IntegratedIntensity_Vimentin,Cells|Intensity_IntegratedIntensity_PanKeratin,Cells|Intensity_IntegratedIntensity_CD8a,Cells|Intensity_IntegratedIntensity_Ki67,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_E7
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Cells
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Region>LungE7_Cell_Mask
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    Saved file format:tiff
    Output file location:Elsewhere...|C:\\Users\\mallam6\\OneDrive - Georgia Institute of Technology\\4. Project Files\\Lung IMC\\Microarray IMC\\Full Lung Ca Microarray 12A
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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